CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Ly6G")
    Name to assign these images:Ly6G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Nox2")
    Name to assign these images:Nox2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Ly6G
    Name the primary objects to be identified:tdTom_neutrophils
    Typical diameter of objects, in pixel units (Min,Max):30,85
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:nuclei
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
RelateObjects:[module_num:7|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
    Parent objects:tdTom_neutrophils
    Child objects:nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:neutrophil_object
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
FilterObjects:[module_num:8|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
    Select the objects to filter:nuclei
    Name the output objects:tdTom_negative_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Parent_tdTom_neutrophils
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.0
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
MeasureObjectIntensity:[module_num:9|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
    Select images to measure:Nox2
    Select objects to measure:neutrophil_object, tdTom_negative_nuclei

MeasureImageAreaOccupied:[module_num:10|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
    Measure the area occupied by:Objects
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    Select object sets to measure:nuclei

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|FileName_Ly6G,Image|FileName_nuclei,Image|FileName_Nox2,Image|Count_tdTom_neutrophils,Image|Count_nuclei,Image|Count_neutrophil_object,neutrophil_object|Parent_nuclei,neutrophil_object|Intensity_MeanIntensity_Nox2,neutrophil_object|Intensity_StdIntensity_Nox2,neutrophil_object|Intensity_IntegratedIntensity_Nox2,neutrophil_object|Intensity_MedianIntensity_Nox2,neutrophil_object|Number_Object_Number,tdTom_negative_nuclei|Intensity_IntegratedIntensity_Nox2,tdTom_negative_nuclei|Intensity_MeanIntensity_Nox2,tdTom_negative_nuclei|Intensity_MedianIntensity_Nox2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_Creflox_B_
    Overwrite existing files without warning?:No
    Data to export:neutrophil_object
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
