CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Ly6G")
    Name to assign these images:Ly6G
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tdTom")
    Name to assign these images:tdTomato
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,45
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the output objects:CellROIs
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:Ly6G, tdTomato
    Select objects to measure:CellROIs

ClassifyObjects:[module_num:8|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
    Make classification decision based on:Pair of measurements
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
    Select the object name:CellROIs
    Select the first measurement:Intensity_MeanIntensity_tdTomato
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Select the second measurement:Intensity_MeanIntensity_Ly6G
    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:Yes
    Enter the low-low bin name:tdTomNeg_Ly6GNeg
    Enter the low-high bin name:tdTomNeg_Ly6GPos
    Enter the high-low bin name:tdTomPos_Ly6GNeg
    Enter the high-high bin name:tdTomPos_Ly6GPos
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model
    Allow fuzzy feature matching?:No

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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